//program for accounting for false positives 
var pointArea=0;
var numberFalse=1;
macro "CD68_CC [s]"{
Dialog.create("False Positives");
Dialog.addNumber("Count points: ", 0);
Dialog.addCheckbox("More points?", false);
Dialog.show();
totalMinusArea = 0;
numberFalse=1;
morePoints = Dialog.getCheckbox();
thresholdValue = Dialog.getString();
falsePositives = Dialog.getNumber();
pointArea = getResult("Area", falsePositives-1);
selectWindow("Summary");

//extracts information from summary window
lines=split(getInfo(), "\n");
headings = split(lines[0], "\t");
values=split(lines[1], "\t");
totalArea = parseInt(values[2]);
percentArea = values[4];

if (morePoints == false)
  {
  correctedArea();
  }
if (morePoints == true){
  addPoint();
  correctedArea();
  }
  selectWindow("Log");
  
//gives the area% after subtracting area of false positives
function correctedArea(){
  print("Total Subtracted Area: "+ pointArea);
  print("Number False Positives: " + numberFalse);
  totalMinusArea = totalArea - pointArea;
  cArea = totalMinusArea*percentArea/totalArea;
  print("Corrected Area: " + totalMinusArea);
  print("Corrected Percent Area: " + cArea + "%");
  }

//allows the user to input additional false positives. 
function addPoint(){
  numberFalse=numberFalse+1;
  Dialog.create("False Positives");
  Dialog.addNumber("Count points: ", 0);
  Dialog.addCheckbox("More points?", false);
  Dialog.show();
  falsePositives = Dialog.getNumber();
  morePoints = Dialog.getCheckbox();
  n = getResult("Area", falsePositives-1);
  //pointArea stores the increasing int gained from repeated point entries
  pointArea = pointArea+n;
  if (morePoints == true){
    addPoint();
  }
  }
}
